PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '0', 'session': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = Exp_Pikachu
  keyboardBackend = ioHub
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Routines
  Routine routine_1
  Routine Start
    TextComponent Welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Bonjour

        et

        Merci pour votre participation !
  Routine Instructions
    TextComponent Instructions_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        INSTRUCTIONS


        Vous allez lire 32 anecdotes sur cet ordinateur.
        La tâche consiste à lire et/ou réécrire des anecdotes qui seront affichées sur l'écran.
        Vous avez un temps limité pour lire/écrire l'anecdote affichée.
    TextComponent Instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 10
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      text:
        Vous verrez le message suivant après chaque validation d'une anecdote :


        'L'anecdote a été sauvegardée dans le fichier FAITS' (ou DONNEES, INFOS, NOMS, ITEMS, POINTS) par ['NOMPERSONNAGE']


        Appelez l'expérimentateur quand vous êtes prêt.
    KeyboardComponent key_resp
      allowedKeys = 'i'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine blank500
    TextComponent blank1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Instructions_reco
    TextComponent Instructions_reco_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Les anecdotes préalablement vues vont être à nouveau affichées à l'écran.

        Vous allez devoir écrire le nom du fichier dans lequel l'anecdote a été sauvegardée ou le nom du personnage qui l'a sauvegardé.

        Pour rappel, les noms des fichiers sont :  DONNEES, INFO, NOMS, ITEMS, FAITS, POINTS

        Les noms des personnages sont : Pikachu, DeepBlue, E.T, Sam, Amazon, R2D2

        Appuyez sur la touche [espace] pour commencer.
    KeyboardComponent instructions_reco_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4
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  Routine Reco_task
    TextComponent anecdotes_train_2
      letterHeight = 0.05
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $anecdotes
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    TextboxComponent reco_text_train
      bold = False
      contrast = .5
      editable = True
      letterHeight = 0.05
      pos = (0, -.1)
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent validation_train_reco
      letterHeight = 0.02
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Valider
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    MouseComponent mouse_reco_train
      clickable = validation_train_reco
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine blank500_2
  Routine blank400
    TextComponent blank2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine End
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        Merci pour votre participation !

        Veuillez appelez l'expérimentateur pour finir l'expérimentation.
  Routine Sam_1
    TextComponent Anecdotes_Sam
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        Le Groenland est l’île la plus grande du monde par sa superficie
    TextComponent blank_4
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_Sam
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier FAITS
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    TextComponent feedback_fichier_Sam
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par Sam
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  Routine Sam_2
    TextComponent Anecdotes_Sam_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        Il y a eu 25 présidents Français
    TextComponent blank_7
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_Sam_2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier DONNEES
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    TextComponent feedback_fichier_Sam_2
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par Sam
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  Routine Sam_3
    TextComponent Anecdotes_Sam_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        Les frites sont originaires de France et non de Belgique
    TextComponent blank_8
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_Sam_3
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier NOMS
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    TextComponent feedback_fichier_Sam_3
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par Sam
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  Routine Sam_4
    TextComponent Anecdotes_Sam_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        L’écriture chinoise comprend plus de 40 000 caractères
    TextComponent blank_9
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_Sam_4
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier POINTS
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    TextComponent feedback_fichier_Sam_4
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par Sam
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  Routine Sam_5
    TextComponent Anecdotes_Sam_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        Les séparatistes Tchéchènes du Sud de la Russie ont pris en otage une école en septembre 2004
    TextComponent blank_10
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_Sam_5
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier ITEMS
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    TextComponent feedback_fichier_Sam_5
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par Sam
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  Routine Sam_6
    TextComponent Anecdotes_Sam_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        Tout comme l’empreinte digitale, le cœur est propre à chaque individu et on peut l’identifier grâce à sa signature cardiaque
    TextComponent blank_11
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_Sam_6
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier INFOS
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    TextComponent feedback_fichier_Sam_6
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par Sam
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  Routine Pikachu_1
    TextComponent anecdotes_Pikachu
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        Le tsunami dévastateur en Asie s’est produit en décembre 2004
    TextboxComponent Pikachu_text_resp
      bold = False
      contrast = .5
      editable = True
      letterHeight = 0.05
      pos = (0, -.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    TextComponent blank_2
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_Pikachu
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier :
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    TextComponent feedback_fichier_Pikachu
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = DONNEES
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  Routine Pikachu_2
    TextComponent anecdotes_Pikachu_2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        Les ongles incarnés sont héréditaires
    TextboxComponent Pikachu_text_resp_2
      bold = False
      contrast = .5
      editable = True
      letterHeight = 0.05
      pos = (0, -.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    TextComponent blank_12
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_Pikachu_2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier :
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    TextComponent feedback_fichier_Pikachu_2
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = POINTS
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  Routine Pikachu_3
    TextComponent anecdotes_Pikachu_3
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        La carte de visite d’Al Capone indiquait qu’il était vendeur de meuble d’occasion
    TextboxComponent Pikachu_text_resp_3
      bold = False
      contrast = .5
      editable = True
      letterHeight = 0.05
      pos = (0, -.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    TextComponent blank_13
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_Pikachu_3
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier :
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    TextComponent feedback_fichier_Pikachu_3
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = INFOS
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  Routine Pikachu_4
    TextComponent anecdotes_Pikachu_4
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        L’œil d’une autruche est plus gros que son cerveau
    TextboxComponent Pikachu_text_resp_4
      bold = False
      contrast = .5
      editable = True
      letterHeight = 0.05
      pos = (0, -.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    TextComponent blank_14
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_Pikachu_4
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier :
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    TextComponent feedback_fichier_Pikachu_4
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = NOMS
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  Routine Pikachu_5
    TextComponent anecdotes_Pikachu_5
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        La plus longue composition classique prendrait 639 ans à être interprétée
    TextboxComponent Pikachu_text_resp_5
      bold = False
      contrast = .5
      editable = True
      letterHeight = 0.05
      pos = (0, -.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    TextComponent blank_15
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_Pikachu_5
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier :
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    TextComponent feedback_fichier_Pikachu_5
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = FAITS
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  Routine Pikachu_6
    TextComponent anecdotes_Pikachu_6
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        La raie manta peut atteindre 9 mètres de long pour environ 2 tonnes
    TextboxComponent Pikachu_text_resp_6
      bold = False
      contrast = .5
      editable = True
      letterHeight = 0.05
      pos = (0, -.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    TextComponent blank_16
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_Pikachu_6
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier :
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    TextComponent feedback_fichier_Pikachu_6
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = ITEMS
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  Routine R2D2_1
    TextComponent anecdotes_R2D2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        Les oiseaux bleus ne peuvent pas voir la couleur bleue
    TextComponent blank_6
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_R2D2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier ITEMS
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    TextComponent feedback_fichier_train_6
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par R2D2
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  Routine R2D2_2
    TextComponent anecdotes_R2D2_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        La navette Spatiale Columbia s’est désintégrée durant son entrée dans l’atmosphère au-dessus du Texas en février 2003
    TextComponent blank_21
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_R2D2_2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier NOMS
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    TextComponent feedback_fichier_train
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par R2D2
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  Routine R2D2_3
    TextComponent anecdotes_R2D2_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        La république dominicaine est le seul pays qui possède un drapeau contenant une bible
    TextComponent blank_22
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_R2D2_3
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier DONNEES
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    TextComponent feedback_fichier_train_7
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par R2D2
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  Routine R2D2
  Routine R2D2_4
    TextComponent anecdotes_R2D2_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        L’Himalaya continue de grandir en raison des collisions des plaques tectoniques
    TextComponent blank_23
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_R2D2_4
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier FAITS
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    TextComponent feedback_fichier_train_8
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par R2D2
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  Routine R2D2_5
    TextComponent anecdotes_R2D2_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        La cacahuète est l’un des ingrédients de la dynamite
    TextComponent blank_24
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_R2D2_5
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier POINTS
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    TextComponent feedback_fichier_train_9
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par R2D2
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  Routine DeepBlue_1
    TextComponent anecdotes_DeepBlue
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        Seulement 2 pays touchent 3 océans, les Etats-Unis et le Canada
    TextComponent blank_3
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_deepblue
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier NOMS
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    TextComponent feedback_fichier_deepblue
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par DeepBlue
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  Routine deepblue_2
    TextComponent anecdotes_DeepBlue_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        L’indicatif téléphonique international de l’Antarctique est 672
    TextComponent blank_25
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_deepblue_2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier INFOS
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    TextComponent feedback_fichier_deepblue_2
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par DeepBlue
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  Routine deepblue_3
    TextComponent anecdotes_DeepBlue_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        Les concerts Live 8 ont pris place dans les pays du G8 et en Afrique du Sud en juillet 2005
    TextComponent blank_26
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_deepblue_3
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier ITEMS
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    TextComponent feedback_fichier_deepblue_3
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par DeepBlue
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  Routine deepblue_4
    TextComponent anecdotes_DeepBlue_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        La pyramide de Gizé est la seule des 7 merveilles de l’ancien monde qui existe toujours
    TextComponent blank_27
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_deepblue_4
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier DONNEES
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    TextComponent feedback_fichier_deepblue_4
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par DeepBlue
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  Routine deepblue_5
    TextComponent anecdotes_DeepBlue_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        Le cœur d’une crevette est dans sa tête
    TextComponent blank_28
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_deepblue_5
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier NOMS
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    TextComponent feedback_fichier_deepblue_5
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par DeepBlue
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  Routine E_T_1
    TextComponent anecdotes_E_T
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        Un attentat terroriste a eu lieu dans les métros Londonien en juillet 2005
    TextComponent blank
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_E_T
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier INFOS
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    TextComponent feedback_fichier_E_T
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par E.T
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  Routine E_T_2
    TextComponent anecdotes_E_T_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        Les élastiques sont plus longs quand ils sont très froids/réfrigérés
    TextComponent blank_29
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_E_T_2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier FAITS
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    TextComponent feedback_fichier_E_T_2
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par E.T
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  Routine E_T_3
    TextComponent anecdotes_E_T_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        Il y a en moyenne 178 graines de sésames sur le pain du Big Mac de McDonald
    TextComponent blank_30
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_E_T_3
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier POINTS
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    TextComponent feedback_fichier_E_T_3
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par E.T
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  Routine E_T_4
    TextComponent anecdotes_E_T_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        La Corée du Nord a annoncé avoir conduit un test nucléaire avec succès en octobre 2006
    TextComponent blank_31
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_E_T_4
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier ITEMS
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    TextComponent feedback_fichier_E_T_4
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par E.T
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  Routine E_T_5
    TextComponent anecdotes_E_T_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        On peut reproduire une clé grâce au son qu’elle émet lorsqu’on l’insère dans une serrure
    TextComponent blank_32
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_E_T_5
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier INFOS
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    TextComponent feedback_fichier_E_T_5
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par E.T
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  Routine Rappel_task
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Veuillez attendre l'expérimentateur pour continuer.
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    KeyboardComponent key_resp_2
      allowedKeys = 'i'
      forceEndRoutine = True
      startVal [time (s)] = 30
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  Routine Amazon_1
    TextComponent anecdotes_Hamtaro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        Une vache produit environ 200 000 bouteilles de lait dans sa vie
    TextComponent blank_5
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_Hamtaro
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier POINTS
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    TextComponent feedback_fichier_Hamtaro
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par Amazon
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  Routine Amazon_2
    TextComponent anecdotes_Hamtaro_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        L’Europe est le seul continent sans désert
    TextComponent blank_17
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_Hamtaro_2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier ITEMS
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    TextComponent feedback_fichier_Hamtaro_2
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par Amazon
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  Routine Amazon_3
    TextComponent anecdotes_Hamtaro_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        L’océan Atlantique est plus salé que l’océan Pacifique
    TextComponent blank_18
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_Hamtaro_3
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier FAITS
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    TextComponent feedback_fichier_Hamtaro_3
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par Amazon
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  Routine Amazon_4
    TextComponent anecdotes_Hamtaro_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        Une personne brule plus de calories quand il dort que lorsqu’il regarde la télé
    TextComponent blank_19
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_Hamtaro_4
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier INFOS
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    TextComponent feedback_fichier_Hamtaro_4
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par Amazon
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  Routine Amazon_5
    TextComponent anecdotes_Hamtaro_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text:
        Une personne perdra environ 18 kilos de peau durant toute sa vie
    TextComponent blank_20
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_Hamtaro_5
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier DONNEES
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    TextComponent feedback_fichier_Hamtaro_5
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 5
      text = par Hamtaro
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Flow
  Routine Start
  Routine Instructions
  Routine blank500
  Routine Sam_1
  Routine Pikachu_1
  Routine Amazon_1
  Routine R2D2_1
  Routine DeepBlue_1
  Routine E_T_1
  Routine Sam_2
  Routine Pikachu_2
  Routine Amazon_2
  Routine R2D2_2
  Routine deepblue_2
  Routine E_T_2
  Routine Sam_3
  Routine Pikachu_3
  Routine Amazon_3
  Routine R2D2_3
  Routine deepblue_3
  Routine E_T_3
  Routine Sam_4
  Routine Pikachu_4
  Routine Amazon_4
  Routine R2D2_4
  Routine deepblue_4
  Routine E_T_4
  Routine Sam_5
  Routine Pikachu_5
  Routine Amazon_5
  Routine R2D2_5
  Routine deepblue_5
  Routine E_T_5
  Routine Sam_6
  Routine Pikachu_6
  Routine blank500
  Routine Rappel_task
  Routine blank500
  Routine Instructions_reco
  Routine blank500
  LoopInitiator reco_train loopType="TrialHandler"
    conditionsFile = C:/Users/cassi/OneDrive/Bureau/Dossier_exp/Expérimentation_Groupe/Anec_expérimentation.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'anecdotes': 'Le Groenland est l’île la plus grande du monde par sa superficie  ', 'fichier': 'FAITS', 'nom_rattaché': 'Sam'},
      {'anecdotes': 'LE.Tsunami dévastateur en Asie s’est produit en décembre 2004 ', 'fichier': 'DONNEES', 'nom_rattaché': 'Pikachu'},
      {'anecdotes': 'Une vache produit environ 200 000 bouteilles de lait dans sa vie  ', 'fichier': 'POINTS', 'nom_rattaché': 'Hamtaro'},
      {'anecdotes': 'Les oiseaux bleus ne peuvent pas voir la couleur bleue  ', 'fichier': 'ITEMS', 'nom_rattaché': 'R2D2'},
      {'anecdotes': 'Seulement 2 pays touchent 3 océans, les Etats-Unis et le Canada', 'fichier': 'NOMS', 'nom_rattaché': 'DeepBlue'},
      {'anecdotes': 'Un attentat terroriste a eu lieu dans les métros Londonien en juillet 2005 ', 'fichier': 'INFOS', 'nom_rattaché': 'E.T'},
      {'anecdotes': 'Il y a eu 25 présidents Français ', 'fichier': 'DONNEES', 'nom_rattaché': 'Sam'},
      {'anecdotes': 'Les ongles incarnés sont héréditaires ', 'fichier': 'POINTS', 'nom_rattaché': 'Pikachu'},
      {'anecdotes': 'L’Europe est le seul continent sans désert ', 'fichier': 'ITEMS', 'nom_rattaché': 'Hamtaro'},
      {'anecdotes': 'La navette Spatiale Columbia s’est désintégrée durant son entrée dans l’atmosphère au-dessus du Texas en février 2003 ', 'fichier': 'NOMS', 'nom_rattaché': 'R2D2'},
      {'anecdotes': 'L’indicatif téléphonique international de l’Antarctique est 672 ', 'fichier': 'INFOS', 'nom_rattaché': 'DeepBlue'}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
    Routine Reco_task
    Routine blank400
  LoopTerminator reco_train
  Routine blank500
  Routine End
