PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '0', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1024, 980]
  expName = Train_deepblue
  keyboardBackend = ioHub
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Routines
  Routine routine_1
  Routine Start
    TextComponent Welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Bonjour

        et

        Merci pour votre participation !
  Routine Instructions
    TextComponent Instructions_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        INSTRUCTIONS


        Vous allez lire 6 anecdotes sur cet ordinateur.
        La tâche consiste à lire et/ou réécrire des anecdotes qui seront affichées sur l'écran.
        Vous avez un temps limité pour lire/écrire l'anecdote affichée.
    TextComponent Instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 10
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      text:
        Vous verrez le message suivant après chaque validation d'une anecdote :
        'L'anecdote a été sauvegardée dans le fichier FAITS' (ou DONNEES, INFOS, NOMS, ITEMS, POINTS) par : ['NOMPERSONNAGE']

        Vous allez tout d'abord réaliser une phase d'entrainement pour vous familiariser avec la tâche.

        Appelez l'expérimentateur quand vous êtes prêt.
    KeyboardComponent key_resp
      allowedKeys = 'i'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine blank500
    TextComponent blank1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Instructions_reco
    TextComponent Instructions_reco_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Les anecdotes préalablement vues vont être à nouveau affichées à l'écran.

        Vous allez devoir écrire le nom du fichier dans lequel l'anecdote a été sauvegardée ou le personnage qui l'a sauvegardé.

        Vous avez accès au dossier sur le bureau de l'ordinateur. Ce dossier contient les fichiers et les noms des personnages vus préalablemment.

        Pour rappel, les noms des fichiers sont :  DONNEES, INFOS, NOMS, ITEMS, FAITS, POINTS.

        Appelez l'expérimentateur pour commencer.
    KeyboardComponent instructions_reco_key
      allowedKeys = 'i'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine Reco_task
    TextComponent anecdotes_train_2
      letterHeight = 0.05
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $anec
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    TextboxComponent reco_text_train
      bold = False
      contrast = .5
      editable = True
      letterHeight = 0.05
      pos = (0, -.1)
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent validation_train_reco
      letterHeight = 0.02
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Valider
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    MouseComponent mouse_reco_train
      clickable = validation_train_reco
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine blank500_2
  Routine blank400
    TextComponent blank2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine End
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Merci pour votre participation !

        Veuillez appelez l'expérimentateur pour commencer la tâche.
  Routine DeepBlue
    TextComponent anecdotes_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Le Coca Cola était à la base un médicament
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    TextComponent blank_3
      letterHeight = 0.05
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_3
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 10.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier FAITS
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    TextComponent feedback_fichier_train_3
      letterHeight = 0.05
      startVal [time (s)] = 10.5
      stopVal [duration (s)] = 5
      text = par DeepBlue
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  Routine Sam
    TextComponent anecdotes_4
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = L'escargot est un animal hermaphrodite
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    TextboxComponent train_text_2
      bold = False
      contrast = .5
      editable = True
      letterHeight = 0.05
      pos = (0, -.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent blank_4
      letterHeight = 0.05
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_4
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 10.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier :
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    TextComponent feedback_fichier_train_4
      letterHeight = 0.05
      startVal [time (s)] = 10.5
      stopVal [duration (s)] = 5
      text = INFOS
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  Routine R2D2
    TextComponent anecdotes_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Le diamètre du soleil diminue d’un mètre par heure
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    TextComponent blank_6
      letterHeight = 0.05
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_6
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 10.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier NOMS
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    TextComponent feedback_fichier_train_6
      letterHeight = 0.05
      startVal [time (s)] = 10.5
      stopVal [duration (s)] = 5
      text = par R2D2
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  Routine E_T
    TextComponent anecdotes_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Le kangourou est l'animal emblématique de l'Australie
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    TextComponent blank
      letterHeight = 0.05
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 10.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier DONNEES
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    TextComponent feedback_fichier_train_1
      letterHeight = 0.05
      startVal [time (s)] = 10.5
      stopVal [duration (s)] = 5
      text = par E.T
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  Routine Pikachu
    TextComponent anecdotes_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Une voiture a 4 roues
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    TextComponent blank_2
      letterHeight = 0.05
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 10.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier POINTS
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    TextComponent feedback_fichier_train_2
      letterHeight = 0.05
      startVal [time (s)] = 10.5
      stopVal [duration (s)] = 5
      text = par  Pikachu
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  Routine Amazon
    TextComponent anecdotes_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Mâcher un chewing-gum en épluchant un oignon éviterait de nous faire pleurer
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    TextComponent blank_5
      letterHeight = 0.05
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_phrase_5
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 10.5
      stopVal [duration (s)] = 5
      text = L'anecdote a été sauvegardée dans le fichier ITEMS
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    TextComponent feedback_fichier_train_5
      letterHeight = 0.05
      startVal [time (s)] = 10.5
      stopVal [duration (s)] = 5
      text = par Amazon
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Flow
  Routine Start
  Routine Instructions
  Routine blank500
  Routine Pikachu
  Routine E_T
  Routine DeepBlue
  Routine Sam
  Routine Amazon
  Routine R2D2
  Routine blank500
  Routine Instructions_reco
  Routine blank500
  LoopInitiator reco_train loopType="TrialHandler"
    conditionsFile = C:/Users/cassi/OneDrive/Bureau/Dossier_exp/Expérimentation_Groupe/StimTrainPersoFinal.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'anec': 'Une voiture a 4 roues', 'rotation_pika': 'POINTS', 'rotation_E_T': 'Pikachu', 'rotation_DP': 'Pikachu', 'rotation_Sam': 'Pikachu', 'rotation_Hamtaro': 'Pikachu', 'rotation_R2D2': 'Pikachu', 'fichier': 'POINTS'},
      {'anec': "Le kangourou est l'animal emblématique de l'Australie", 'rotation_pika': 'E.T', 'rotation_E_T': 'DONNEES', 'rotation_DP': 'E.T', 'rotation_Sam': 'E.T', 'rotation_Hamtaro': 'E.T', 'rotation_R2D2': 'E.T', 'fichier': 'DONNEES'},
      {'anec': 'Le Coca Cola était à la base un médicament', 'rotation_pika': 'DeepBlue', 'rotation_E_T': 'DeepBlue', 'rotation_DP': 'FAITS', 'rotation_Sam': 'DeepBlue', 'rotation_Hamtaro': 'DeepBlue', 'rotation_R2D2': 'DeepBlue', 'fichier': 'FAITS'},
      {'anec': "L'escargot est un animal hermaphrodite", 'rotation_pika': 'Sam', 'rotation_E_T': 'Sam', 'rotation_DP': 'Sam', 'rotation_Sam': 'INFOS', 'rotation_Hamtaro': 'Sam', 'rotation_R2D2': 'Sam', 'fichier': 'INFOS'},
      {'anec': 'Mâcher un chewing-gum en épluchant un oignon éviterait de nous faire pleurer', 'rotation_pika': 'Hamtaro', 'rotation_E_T': 'Hamtaro', 'rotation_DP': 'Hamtaro', 'rotation_Sam': 'Hamtaro', 'rotation_Hamtaro': 'ITEMS', 'rotation_R2D2': 'Hamtaro', 'fichier': 'ITEMS'},
      {'anec': 'Le diamètre du soleil diminue d’un mètre par heure', 'rotation_pika': 'R2D2', 'rotation_E_T': 'R2D2', 'rotation_DP': 'R2D2', 'rotation_Sam': 'R2D2', 'rotation_Hamtaro': 'R2D2', 'rotation_R2D2': 'NOMS', 'fichier': 'NOMS'}]
    Routine Reco_task
    Routine blank400
  LoopTerminator reco_train
  Routine blank500
  Routine End
