PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = Expérimentation1_SOLO
  keyboardBackend = ioHub
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Routines
  Routine Start
    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Bienvenue

        et

        merci pour votre participation !
    TextComponent Instructions
      letterHeight = 0.05
      startVal [time (s)] = 2.0
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      text:
        INSTRUCTIONS

        Vous allez lire et taper 32 anecdotes sur cet ordinateur.

        La tâche consiste à réécrire des anecdotes qui seront affichées sur l'écran.
        Vous verrez le message suivant après chaque validation d'une anecdote :
        'Votre entrée a été sauvegardée dans le fichier FAITS' (ou DONNEES, INFOS, NOMS, ITEMS, POINTS).


        Appuyer sur la touche 'espace' pour commencer
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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  Routine feedback
    TextComponent feedbacktext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Votre entrée a été sauvegardée dans le fichier :
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    TextComponent feedback_fichier_train
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $fichier
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  Routine Blank500
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Rappel_task
    TextComponent waiting_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Veuillez appeler un expérimentateur pour la suite de cette expérience.
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    KeyboardComponent key_resp_2
      allowedKeys = 'i'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine Tâche_principale
    TextComponent Anecdotes
      letterHeight = 0.05
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $anecdotes
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    TextboxComponent tache_text
      bold = False
      contrast = .5
      editable = True
      letterHeight = 0.05
      pos = (0, -.1)
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent Validation_button
      letterHeight = 0.02
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Valider
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    MouseComponent mouse_click
      clickable = Validation_button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Reconnaissance_task
    TextComponent Anecdotes_reco
      letterHeight = 0.05
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $anecdotes_reco
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    TextboxComponent reco_text
      bold = False
      contrast = .5
      editable = True
      letterHeight = 0.05
      pos = (0, -.1)
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent validation_reco
      letterHeight = 0.02
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Valider
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    MouseComponent mouse_reco
      clickable = validation_reco
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine EndScreen
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Merci d'avoir participer à cette expérience !

        Veuillez contacter un expérimentateur.
    KeyboardComponent end
      allowedKeys = 'i'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank500_2
  Routine Instructions_reco
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Les anecdotes préalablement vues vont être à nouveau affichées à l'écran.

        Vous allez devoir écrire le nom du fichier dans lequel l'anecdote a été sauvegardée.

        Pour rappel, les noms des fichiers sont :  DONNEES, INFOS, NOMS, ITEMS, FAITS, POINTS


        Appuyez sur la touche 'espace' pour commencer.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine blank501_2
  Routine blank500
    TextComponent blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine Training
    TextComponent anecdote_train
      letterHeight = 0.05
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $anecdotes_train
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    TextboxComponent train_text
      bold = False
      contrast = .5
      editable = True
      letterHeight = 0.05
      pos = (0, -.1)
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent validation_train
      letterHeight = 0.02
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Valider
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    MouseComponent mouse_train
      clickable = validation_train
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine feedback_2
  Routine blank500_3
  Routine Training_reco
    TextComponent anecdotes_train_2
      letterHeight = 0.05
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $anecdotes_train
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    TextboxComponent reco_text_train
      bold = False
      contrast = .5
      editable = True
      letterHeight = 0.05
      pos = (0, -.1)
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent validation_train_reco
      letterHeight = 0.02
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Valider
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    MouseComponent mouse_reco_train
      clickable = validation_train_reco
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine blank500_4
  Routine Instruciton_reco_train
    TextComponent Instruc_reco_train
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Les anecdotes préalablement vues vont être à nouveau affichées à l'écran.

        Vous allez devoir écrire le nom du fichier dans lequel l'anecdote a été sauvegardée.

        Pour rappel, les noms des fichiers sont :  DONNEES, INFO, NOMS, ITEMS, FAITS, POINTS

        Appuyez sur la touche 'espace' pour commencer.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine Start_Experiment
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Appelez l'expérimentateur pour commencer la tâche.
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    KeyboardComponent key_resp_5
      allowedKeys = 'i'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Start
  LoopInitiator boucle_tâche loopType="TrialHandler"
    conditionsFile = EXPE_STIM.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'anecdotes': 'Le Groenland est l’île la plus grande du monde par sa superficie  ', 'fichier': 'FAITS', 'anecdotes_reco': 'Le Groenland est l’île la plus grande du monde par sa superficie  '},
      {'anecdotes': 'Le tsunami dévastateur en Asie s’est produit en décembre 2004 ', 'fichier': 'FAITS', 'anecdotes_reco': 'Le tsunami dévastateur en Asie s’est produit en décembre 2004 '},
      {'anecdotes': 'Une vache produit environ 200 000 bouteilles de lait dans sa vie  ', 'fichier': 'FAITS', 'anecdotes_reco': 'Une vache produit environ 200 000 bouteilles de lait dans sa vie  '},
      {'anecdotes': 'Les oiseaux bleus ne peuvent pas voir la couleur bleue  ', 'fichier': 'FAITS', 'anecdotes_reco': 'Les oiseaux bleus ne peuvent pas voir la couleur bleue  '},
      {'anecdotes': 'Seulement 2 pays touchent 3 océans, les Etats-Unis et le Canada', 'fichier': 'FAITS', 'anecdotes_reco': 'Seulement 2 pays touchent 3 océans, les Etats-Unis et le Canada'},
      {'anecdotes': 'Un attentat terroriste a eu lieu dans les métros Londonien en juillet 2005 ', 'fichier': 'DONNEES', 'anecdotes_reco': 'Un attentat terroriste a eu lieu dans les métros Londonien en juillet 2005 '},
      {'anecdotes': 'Il y a eu 25 présidents Français ', 'fichier': 'DONNEES', 'anecdotes_reco': 'Il y a eu 25 présidents Français '},
      {'anecdotes': 'Les ongles incarnés sont héréditaires ', 'fichier': 'DONNEES', 'anecdotes_reco': 'Les ongles incarnés sont héréditaires '}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
    Routine Tâche_principale
    Routine feedback
    Routine Blank500
  LoopTerminator boucle_tâche
  Routine Rappel_task
  Routine blank500
  Routine Instructions_reco
  Routine blank500
  LoopInitiator boucle_reco loopType="TrialHandler"
    conditionsFile = EXPE_STIM.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'anecdotes': 'Le Groenland est l’île la plus grande du monde par sa superficie  ', 'fichier': 'FAITS', 'anecdotes_reco': 'Le Groenland est l’île la plus grande du monde par sa superficie  '},
      {'anecdotes': 'Le tsunami dévastateur en Asie s’est produit en décembre 2004 ', 'fichier': 'FAITS', 'anecdotes_reco': 'Le tsunami dévastateur en Asie s’est produit en décembre 2004 '},
      {'anecdotes': 'Une vache produit environ 200 000 bouteilles de lait dans sa vie  ', 'fichier': 'FAITS', 'anecdotes_reco': 'Une vache produit environ 200 000 bouteilles de lait dans sa vie  '},
      {'anecdotes': 'Les oiseaux bleus ne peuvent pas voir la couleur bleue  ', 'fichier': 'FAITS', 'anecdotes_reco': 'Les oiseaux bleus ne peuvent pas voir la couleur bleue  '},
      {'anecdotes': 'Seulement 2 pays touchent 3 océans, les Etats-Unis et le Canada', 'fichier': 'FAITS', 'anecdotes_reco': 'Seulement 2 pays touchent 3 océans, les Etats-Unis et le Canada'},
      {'anecdotes': 'Un attentat terroriste a eu lieu dans les métros Londonien en juillet 2005 ', 'fichier': 'DONNEES', 'anecdotes_reco': 'Un attentat terroriste a eu lieu dans les métros Londonien en juillet 2005 '},
      {'anecdotes': 'Il y a eu 25 présidents Français ', 'fichier': 'DONNEES', 'anecdotes_reco': 'Il y a eu 25 présidents Français '},
      {'anecdotes': 'Les ongles incarnés sont héréditaires ', 'fichier': 'DONNEES', 'anecdotes_reco': 'Les ongles incarnés sont héréditaires '}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
    Routine Reconnaissance_task
    Routine blank500
  LoopTerminator boucle_reco
  Routine EndScreen
