PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = Expérimentation1_SOLO_TRAIN
  keyboardBackend = ioHub
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Routines
  Routine Start
    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Bienvenue

        et

        merci pour votre participation !
    TextComponent Instructions
      letterHeight = 0.05
      startVal [time (s)] = 2.0
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      text:
        INSTRUCTIONS

        Vous allez lire et taper 6 anecdotes sur cet ordinateur.
        La tâche consiste à réécrire des anecdotes qui seront affichées sur l'écran.
        Vous verrez le message suivant après chaque validation d'une anecdote :
        'Votre entrée a été enregistrée dans le dossier FAITS' (ou DONNEES, INFO, NOMS, ITEMS, POINTS).

        Vous allez tout d'abord réaliser une phase d'entrainement pour vous familiariser avec la tâche.

        Appuyer sur la touche 'espace' pour commencer
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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  Routine feedback
    TextComponent feedbacktext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Votre entrée a été sauvegardée dans le fichier :
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    TextComponent feedback_fichier_train
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $fichier_train
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  Routine Blank500
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Rappel_task
    TextComponent waiting_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Veuillez appeler un expérimentateur pour la suite de cette expérience
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    KeyboardComponent key_resp_2
      allowedKeys = 'i'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine Tâche_principale
    TextComponent Anecdotes
      letterHeight = 0.05
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $anecdotes
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    TextboxComponent tache_text
      bold = False
      contrast = .5
      editable = True
      letterHeight = 0.05
      pos = (0, -.1)
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent Validation_button
      letterHeight = 0.02
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Valider
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    MouseComponent mouse_click
      clickable = Validation_button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Reconnaissance_task
    TextComponent Anecdotes_reco
      letterHeight = 0.05
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $anecdotes_reco
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    TextboxComponent reco_text
      bold = False
      contrast = .5
      editable = True
      letterHeight = 0.05
      pos = (0, -.1)
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent validation_reco
      letterHeight = 0.02
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Valider
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    MouseComponent mouse_reco
      clickable = validation_reco
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine EndScreen
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Veuillez appeler l'expérimentateur. 
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    KeyboardComponent end
      allowedKeys = 'i'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank500_2
  Routine Instructions_reco
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Les anecdotes préalablement vues vont être à nouveau affichées à l'écran.

        Vous allez devoir écrire le nom du fichier dans lequel l'anecdote a été sauvegardée.

        Pour rappel, les noms des fichiers sont :  DONNEES, INFO, NOMS, ITEMS, FAITS, POINTS


        Appuyez sur la touche 'espace' pour commencer.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine blank501_2
  Routine blank500
    TextComponent blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine Training
    TextComponent anecdote_train
      letterHeight = 0.05
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $anecdotes_train
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    TextboxComponent train_text
      bold = False
      contrast = .5
      editable = True
      letterHeight = 0.05
      pos = (0, -.1)
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent validation_train
      letterHeight = 0.02
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Valider
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    MouseComponent mouse_train
      clickable = validation_train
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine feedback_2
  Routine blank500_3
  Routine Training_reco
    TextComponent anecdotes_train_2
      letterHeight = 0.05
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $anecdotes_train
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    TextboxComponent reco_text_train
      bold = False
      contrast = .5
      editable = True
      letterHeight = 0.05
      pos = (0, -.1)
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent validation_train_reco
      letterHeight = 0.02
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Valider
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    MouseComponent mouse_reco_train
      clickable = validation_train_reco
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine blank500_4
  Routine Instruciton_reco_train
    TextComponent Instruc_reco_train
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Les anecdotes préalablement vues vont être à nouveau affichées à l'écran.

        Vous allez devoir écrire le nom du fichier dans lequel l'anecdote a été sauvegardée.

        Pour rappel, les noms des fichiers sont :  DONNEES, INFO, NOMS, ITEMS, FAITS, POINTS

        Appuyez sur la touche 'espace' pour commencer.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine Start_Experiment
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Appelez l'expérimentateur pour commencer la tâche.
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    KeyboardComponent key_resp_5
      allowedKeys = 'i'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Start
  LoopInitiator Train_loop loopType="TrialHandler"
    conditionsFile = EXPE_TRAIN.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'anecdotes_train': 'Une voiture a 4 roues', 'fichier_train': 'POINTS'},
      {'anecdotes_train': "Le kangourou est l'animal emblématique de l'Australie", 'fichier_train': 'NOMS'},
      {'anecdotes_train': 'Le Coca Cola était à la base un médicament', 'fichier_train': 'ITEMS'},
      {'anecdotes_train': 'Au Royaume-Uni, il est légal de tuer un Écossais dans la ville de York s’il porte un arc et des flèches', 'fichier_train': 'DONNEES'},
      {'anecdotes_train': 'Mâcher un chewing-gum en épluchant un oignon éviterait de nous faire pleurer', 'fichier_train': 'INFOS'},
      {'anecdotes_train': 'Le diamètre du soleil diminue d’un mètre par heure', 'fichier_train': 'FAITS'}]
    Routine Training
    Routine feedback
    Routine blank500
  LoopTerminator Train_loop
  Routine Instruciton_reco_train
  LoopInitiator Train_reco_loop loopType="TrialHandler"
    conditionsFile = EXPE_TRAIN.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'anecdotes_train': 'Une voiture a 4 roues', 'fichier_train': 'POINTS'},
      {'anecdotes_train': "Le kangourou est l'animal emblématique de l'Australie", 'fichier_train': 'NOMS'},
      {'anecdotes_train': 'Le Coca Cola était à la base un médicament', 'fichier_train': 'ITEMS'},
      {'anecdotes_train': 'Au Royaume-Uni, il est légal de tuer un Écossais dans la ville de York s’il porte un arc et des flèches', 'fichier_train': 'DONNEES'},
      {'anecdotes_train': 'Mâcher un chewing-gum en épluchant un oignon éviterait de nous faire pleurer', 'fichier_train': 'INFOS'},
      {'anecdotes_train': 'Le diamètre du soleil diminue d’un mètre par heure', 'fichier_train': 'FAITS'}]
    Routine Training_reco
    Routine blank500
  LoopTerminator Train_reco_loop
  Routine Blank500
  Routine EndScreen
